PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  expName = pilot_study
  exportHTML = on Save
  keyboardBackend = PsychToolbox
  measureFrameRate = False
  runMode = 0
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Routines
  Routine WelcomeScreen
    RoutineSettingsComponent WelcomeScreen
      saveStartStop = False
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    TextComponent welcome_message
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Hello, Welcome the Image Matching study conducted by the VIDAR lab.

        In this study, you will be given a query image of a hotel room, and six similar images.

        Your task is to select the image that is a match to the query image.

        Press 'SPACE' to continue.
    KeyboardComponent next_key
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine EndScreen
    RoutineSettingsComponent EndScreen
      saveStartStop = False
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    TextComponent end_message
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Thank you for completing!

        Please wait while we save your results...
    CodeComponent DataPipe_Link
      Code Type = JS
      Begin JS Routine:
        // Prevent default browser CSV download
        //psychoJS._saveResults = 0;

        // Generate filename for results
        let filename = psychoJS._experiment._experimentName + '_' + psychoJS._experiment._datetime + '.csv';

        // Extract data object from experiment
        let dataObj = psychoJS._experiment._trialsData;

        // Convert data object to CSV
        let data = [Object.keys(dataObj[0])].concat(dataObj).map(it => {
            return Object.values(it).toString()
        }).join('\n')

        // Send data to OSF via DataPipe
        console.log('Saving data...')
        fetch('https://pipe.jspsych.org/api/data', {
            method: 'POST',
            headers: {
                'Content-Type': 'application/json',
                Accept: '*/*',
            },
            body: JSON.stringify({
                experimentID: 'DLFoEuJu8PX1',
                filename: filename,
                data: data,
            }),
        }).then(response => response.json()).then(data => {
            // Log response and force experiment end
            console.log(data);
            quitPsychoJS();
        })
  Routine Test
    RoutineSettingsComponent Test
      saveStartStop = False
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    TextComponent text_countdown
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      syncScreenRefresh = False
      text [set every frame] = $str(10-int(t))
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Flow
  Routine WelcomeScreen
  Routine EndScreen
